PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ldt_en_hi
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Routines
  Routine trial
    TextboxComponent entrialw1
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $word1
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    TextboxComponent entrialw2
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $word2
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    KeyboardComponent enkbresp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine rest
    KeyboardComponent restresp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instr
    TextboxComponent eninstrstim
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions:

        A pair of commonly used english words will be flashed on the screen.
        Press the right arrow key if both the words are valid english words.
        Press the left arrow key if either one of the words or both words are not valid english words.

        Press left/right keys to try out few examples.
    KeyboardComponent enkbinstr
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine en_warmup
    TextboxComponent enwarmupw1
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $w_word1
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    TextboxComponent enwarmupw2
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $w_word2
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    KeyboardComponent enwarmupkb
      allowedKeys = 'left','right'
      correctAns = $w_corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine startexp
    TextboxComponent startexpprompt
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press left/right arrow key to start the experiment.
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    KeyboardComponent startexpkbresp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextboxComponent thankstext
      bold = False
      editable = False
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating in the study! :)
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Flow
  Routine instr
  LoopInitiator enwarmuptrials loopType="TrialHandler"
    conditionsFile = dataset/en_warmupconditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('w_word1', 'whistle'), ('w_word2', 'england'), ('w_corrAns', 'right'), ('w_category', 2)]),
      OrderedDict([('w_word1', 'ash'), ('w_word2', 'ashtray'), ('w_corrAns', 'right'), ('w_category', 1)]),
      OrderedDict([('w_word1', 'fite'), ('w_word2', 'crack'), ('w_corrAns', 'left'), ('w_category', 4)]),
      OrderedDict([('w_word1', 'sun'), ('w_word2', 'cepy'), ('w_corrAns', 'left'), ('w_category', 5)]),
      OrderedDict([('w_word1', 'mick'), ('w_word2', 'lofy'), ('w_corrAns', 'left'), ('w_category', 3)])]
    Routine en_warmup
    Routine rest
  LoopTerminator enwarmuptrials
  Routine startexp
  Routine rest
  LoopInitiator en_trials loopType="TrialHandler"
    conditionsFile = dataset/en_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'w_word1': 'whistle', 'w_word2': 'england', 'w_corrAns': 'right', 'w_category': 2},
      {'w_word1': 'ash', 'w_word2': 'ashtray', 'w_corrAns': 'right', 'w_category': 1},
      {'w_word1': 'fite', 'w_word2': 'crack', 'w_corrAns': 'left', 'w_category': 4},
      {'w_word1': 'sun', 'w_word2': 'cepy', 'w_corrAns': 'left', 'w_category': 5},
      {'w_word1': 'mick', 'w_word2': 'lofy', 'w_corrAns': 'left', 'w_category': 3}]
    Routine trial
    Routine rest
  LoopTerminator en_trials
  Routine thanks
